PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': '', 'session': '', 'run_number': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = construal_level
  logging level = debug
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Routines
  Routine instructions
    TextComponent instruction
      durationEstim = 20
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $start_text_duration
      text = $start_text_str
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    KeyboardComponent key_resp
      allowedKeys = 'apostrophe'
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $start_text_duration
      store = nothing
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  Routine action
    CodeComponent attention_check_code
      Code Type = Auto->JS
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      Begin Routine:
        if condition_type == 'present':
            attention_check_text = 'How often do you currently engage in this action?'
        else:
            attention_check_text = 'How likely would you engage in this action five years from now?'
      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the rating buttons
        r = convert_key_to_rating(attention_check_keyboard.keys)
        attention_check_rating.markerPos = r
        # confirm rating by setting to current markerPos
        attention_check_rating.rating = r
    TextComponent action_text
      font = Helvetica
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $action
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    TextComponent attention_check
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $attention_check_text
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    SliderComponent attention_check_rating
      font = Helvetica
      forceEndRoutine = False
      granularity = 0
      labels = ['not at all\noften','somewhat\noften','moderately\noften','very\noften','extremely\noften']
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent attention_check_keyboard
      allowedKeys = '5', '6', '7', '8', '9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine cue
    TextComponent cue_str
      font = Helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $"Please imagine the next events occurring " + cue_text
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  Routine scenario_cue
    TextComponent scenario_cue_text
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $"Please imagine the next events occurring " + cue_text
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  Routine quitting_intention
    CodeComponent quitting_intention_code
      Code Type = Auto->JS
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      Begin Routine:
        if condition_type == 'present':
            quitting_intention_str = 'Consider the thoughts that would go through your mind if you were in this situation right now.\n\nTo what extent do these thoughts encourage or discourage you to smoke?'
        else:
            quitting_intention_str = 'Consider the thoughts that would go through your mind if you are in this situation five years from now.\n\nTo what extent do these thoughts encourage or discourage you to smoke?'
      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the rating buttons
        r = convert_key_to_rating(quitting_intention_keyboard.keys)
        quitting_intention_rating.markerPos = r
        # confirm rating by setting to current markerPos
        quitting_intention_rating.rating = r
    TextComponent quitting_intention_text
      font = Helvetica
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $quitting_intention_str
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    SliderComponent quitting_intention_rating
      font = Helvetica
      forceEndRoutine = False
      granularity = 0
      labels = ['encourage\na great deal','encourage\na little','neither encourage\nnor discourage','discourage\na little','discourage\na great deal']
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent quitting_intention_keyboard
      allowedKeys = '5', '6', '7', '8', '9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine scenario1
    TextComponent block1_text
      durationEstim = 10
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $block1_sound.status==FINISHED
      text [set every repeat] = $block1
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    SoundComponent block1_sound
      durationEstim = 10
      sound [set every repeat] = $block1_audio
      startVal [time (s)] = 0.0
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  Routine scenario2
    TextComponent block2_text
      durationEstim = 10
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $block2_sound.status==FINISHED
      text [set every repeat] = $block2
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    SoundComponent block2_sound
      durationEstim = 10
      saveStartStop = False
      sound [set every repeat] = $block2_audio
      startVal [time (s)] = 0.0
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  Routine scenario3
    TextComponent block3_text
      durationEstim = 10
      font = Helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $block3_sound.status==FINISHED
      text [set every repeat] = $block3
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    SoundComponent block3_sound
      durationEstim = 10
      sound [set every repeat] = $block3_audio
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent choose_conditions_file
      Code Type = Both
      Begin Experiment:
        conditions_file_name = 'choose_condition.csv'

        if 'ASH' not in expInfo['participant']:
            is_first = False

        if is_first:
            start_text_str = 'Calibrating scanner'
            start_text_duration = 120
            end_text_str = 'The task has ended. The next task will start in a few seconds.'
            end_text_duration = 10
        else:
            start_text_str = ''
            start_text_duration = 0.1
            end_text_str = ''
            end_text_duration = 0.1

        # session 0 is a practice session
        if expInfo['session'] == '0':
            conditions_file_name = 'choose_condition_practice.csv'
            scenario_trials_selection = [0]
            action_trials_selection = [0, 1, 2]
            start_text_str = 'Practice for construal level task'
        rating_keys = ['5', '6', '7', '8', '9']


        def convert_key_to_rating(key):
            rating = None
            if key in rating_keys:
                rating = int(key)
                rating = rating - 4

            return rating
      Begin JS Experiment:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        conditions_file_name = "choose_condition.csv";

        if (is_first) {
            start_text_str = "Calibrating scanner";
            start_text_duration = 120;
            end_text_str = "The task has ended. The next task will start in a few seconds.";
            end_text_duration = 10;
        } else {
            start_text_str = "";
            start_text_duration = 0.1;
            end_text_str = "";
            end_text_duration = 0.1;
        }
        if ((expInfo["session"] === "0")) {
            conditions_file_name = "choose_condition_practice.csv";
            scenario_trials_selection = [0];
            action_trials_selection = [0, 1, 2];
            start_text_str = "Practice for construal level task";
        }
        rating_keys = ["5", "6", "7", "8", "9"];
        function convert_key_to_rating(key) {
            var rating;
            rating = null;
            if (_pj.in_es6(key, rating_keys)) {
                rating = Number.parseInt(key);
                rating = (rating - 4);
            }
            return rating;
        }
  Routine end
    TextComponent end_text
      durationEstim = 10
      font = Helvetica
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = end_text_duration
      text = $end_text_str
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  Routine block_setup
    CodeComponent choose_conditions
      Code Type = Both
      Begin JS Routine:
        scenario_trials_selection = action_trials_selection = Array.from({length: 1}, () => util.randint(0, 16));
        action_trials_selection = action_trials_selection = Array.from({length: 3}, () => util.randint(0, 48));
      Begin Routine:
        scenario_trials_selection = randint(low=0,high=15,size=1)
        action_trials_selection = randint(low=0,high=47,size=3)
Flow
  Routine setup
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = $conditions_file_name
    loopType = random
    nReps = 1
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    Routine block_setup
    LoopInitiator scenario_trials loopType="TrialHandler"
      Selected rows = $scenario_trials_selection
      conditionsFile = $scenario_file
      loopType = sequential
      nReps = 1
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      LoopInitiator action_trials loopType="TrialHandler"
        Selected rows = $action_trials_selection
        conditionsFile = action_conditions.csv
        loopType = random
        nReps = 1
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        conditions:
          [OrderedDict([('action', 'Grocery shopping')]),
          OrderedDict([('action', 'Driving a car')]),
          OrderedDict([('action', 'Reading a book')]),
          OrderedDict([('action', 'Going on vacation')]),
          OrderedDict([('action', 'Having lunch with a friend')]),
          OrderedDict([('action', 'Buying a car')]),
          OrderedDict([('action', 'Riding in an airplane')]),
          OrderedDict([('action', 'Calling a relative')]),
          OrderedDict([('action', 'Taking a shower')]),
          OrderedDict([('action', 'Going to the gym')]),
          OrderedDict([('action', 'Getting a haircut')]),
          OrderedDict([('action', 'A job interview')]),
          OrderedDict([('action', 'Attending a wedding')]),
          OrderedDict([('action', 'Playing cards')]),
          OrderedDict([('action', 'Making dinner')]),
          OrderedDict([('action', 'Buying coffee')]),
          OrderedDict([('action', 'Writing a letter')]),
          OrderedDict([('action', 'Cashing a check')]),
          OrderedDict([('action', 'Using an ATM')]),
          OrderedDict([('action', 'Doing laundry')]),
          OrderedDict([('action', 'Cleaning your room')]),
          OrderedDict([('action', 'Washing dishes')]),
          OrderedDict([('action', 'Throwing a ball')]),
          OrderedDict([('action', 'Hosting a party')]),
          OrderedDict([('action', 'Composing an email')]),
          OrderedDict([('action', 'Attending a party')]),
          OrderedDict([('action', 'Going shopping')]),
          OrderedDict([('action', 'Sending a text')]),
          OrderedDict([('action', 'Listening to music')]),
          OrderedDict([('action', 'Reading a newspaper')]),
          OrderedDict([('action', 'Riding a bike')]),
          OrderedDict([('action', 'Going for a walk')]),
          OrderedDict([('action', 'Walking a dog')])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
        Routine cue
        Routine action
      LoopTerminator action_trials
      Routine scenario_cue
      Routine scenario1
      Routine scenario2
      Routine scenario3
      Routine quitting_intention
    LoopTerminator scenario_trials
  LoopTerminator block
  Routine end
