PsychoPy2experiment version="2021.1.2"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['workerId'], expName, expInfo['date'])
  Experiment info = {'workerId': '', 'assignmentId': '', 'hitId': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[-1,-1,-1]
  expName = imagination_task
  logging level = debug
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Routines
  Routine instructions
    TextComponent instruction
      durationEstim = 20
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $start_text_duration
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      text:
        IMPORTANT: You should respond to questions through out this task by pressing the "5, 6, 7, 8, 9" buttons.

        When you are ready, press the space bar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $start_text_duration
      store = nothing
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  Routine action
    CodeComponent attention_check_code
      Code Type = Auto->JS
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      Begin Routine:
        if condition_type == 'present':
            attention_check_text = 'How often do you currently engage in this action?'
        else:
            attention_check_text = 'How likely would you engage in this action five years from now?'
      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the rating buttons
        r = convert_key_to_rating(attention_check_keyboard.keys)
        attention_check_rating.markerPos = r
        # confirm rating by setting to current markerPos
        attention_check_rating.rating = r
    TextComponent action_text
      font = Helvetica
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $action
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    TextComponent attention_check
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $attention_check_text
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    SliderComponent attention_check_rating
      font = Helvetica
      forceEndRoutine = False
      granularity = 0
      labels = ['not at all\noften', 'somewhat\noften', 'moderately\noften', 'very\noften', 'extremely\noften']
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent attention_check_keyboard
      allowedKeys = '5', '6', '7', '8', '9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine cue
    TextComponent cue_str
      font = Helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $"Please imagine the next events occurring " + cue_text
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  Routine scenario_cue
    TextComponent scenario_cue_text
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $"Please imagine the next events occurring " + cue_text
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  Routine quitting_intention
    CodeComponent quitting_intention_code
      Code Type = Auto->JS
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      Begin Routine:
        if condition_type == 'present':
            quitting_intention_str = 'Consider the thoughts that would go through your mind if you were in this situation right now.\n\nTo what extent do these thoughts encourage or discourage you to smoke?'
        else:
            quitting_intention_str = 'Consider the thoughts that would go through your mind if you are in this situation five years from now.\n\nTo what extent do these thoughts encourage or discourage you to smoke?'
      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the rating buttons
        r = convert_key_to_rating(quitting_intention_keyboard.keys)
        quitting_intention_rating.markerPos = r
        # confirm rating by setting to current markerPos
        quitting_intention_rating.rating = r
    TextComponent quitting_intention_text
      font = Helvetica
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $quitting_intention_str
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    SliderComponent quitting_intention_rating
      font = Helvetica
      forceEndRoutine = False
      granularity = 0
      labels = ['encourage\na great deal','encourage\na little','neither encourage\nnor discourage','discourage\na little','discourage\na great deal']
      letterHeight = 0.03
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent quitting_intention_keyboard
      allowedKeys = '5', '6', '7', '8', '9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine scenario1
    TextComponent block1_text
      durationEstim = 10
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $block1_sound.status==FINISHED
      text [set every repeat] = $block1
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    SoundComponent block1_sound
      durationEstim = 10
      sound [set every repeat] = $block1_audio
      startVal [time (s)] = 0.0
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  Routine scenario2
    TextComponent block2_text
      durationEstim = 10
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [condition] = $block2_sound.status==FINISHED
      text [set every repeat] = $block2
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    SoundComponent block2_sound
      durationEstim = 10
      saveStartStop = False
      sound [set every repeat] = $block2_audio
      startVal [time (s)] = 0.0
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  Routine scenario3
    TextComponent block3_text
      durationEstim = 10
      font = Helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $block3_sound.status==FINISHED
      text [set every repeat] = $block3
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    SoundComponent block3_sound
      durationEstim = 10
      sound [set every repeat] = $block3_audio
      startVal [time (s)] = 0.0
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  Routine setup
    CodeComponent choose_conditions_file
      Code Type = Both
      Begin Experiment:
        conditions_file_name = os.path.join('conditions', 'choose_condition.csv')
        #is_first = False

        #if is_first:
        #    start_text_str = 'Calibrating scanner'
        start_text_duration = 120
        #    end_text_str = 'The task has ended. The next task will start in a few seconds.'
        end_text_duration = 10
        #else:
        #    start_text_str = ''
        #    start_text_duration = 0.1
        #    end_text_str = 'The task has ended. Waiting for researcher to start next task.'
        #    end_text_duration = 120

        # session 0 is a practice session
        #if expInfo['session'] == '0':
        #    conditions_file_name = os.path.join('conditions', 'choose_condition_practice.csv')
        #    scenario_trials_selection = [0]
        #    action_trials_selection = [0, 1, 2]
        #    start_text_str = 'Practice for construal level task'

        rating_keys = ['5', '6', '7', '8', '9']

        def convert_key_to_rating(key):
            rating = None
            if key in rating_keys:
                rating = int(key)
                rating = rating - 4

            return rating

        import random
        MturkNUMCODE = random.randint(0, 999999999)
        MturkCODE = "Your Mturk completion code is: " + str(MturkNUMCODE) + ". Please press the space bar to ensure your survey response is recorded. Thank you!"

        expInfo['MturkCODE'] = MturkNUMCODE
      Begin JS Experiment:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        };
        _pj = {};
        _pj_snippets(_pj);
        conditions_file_name = "choose_condition.csv";

        //if (is_first) {
        //    start_text_str = "Calibrating scanner";
        start_text_duration = 120;
        //    end_text_str = "The task has ended. The next task will start in a few seconds.";
        end_text_duration = 10;
        //} else {
        //    start_text_str = "";
        //    start_text_duration = 0.1;
        //   end_text_str = "The task has ended. Waiting for researcher to start next task.";
        //    end_text_duration = 120;
        //}
        //if ((expInfo["session"] === "0")) {
        //    conditions_file_name = "choose_condition_practice.csv";
        //    scenario_trials_selection = [0];
        //    action_trials_selection = [0, 1, 2];
        //    start_text_str = "Practice for construal level task";
        //}

        rating_keys = ["5", "6", "7", "8", "9"];

        function convert_key_to_rating(key) {
            var rating = null;
            if (_pj.in_es6(key, rating_keys)) {
                rating = Number.parseInt(key);
                rating = (rating - 4);
            };
            return rating;
        };

        var MturkNUMCODE = Math.floor(Math.random() * 999999999) + 1;
        var MturkCODE = "Your Mturk completion code is: " + MturkNUMCODE + ". Please press the space bar to ensure your survey response is recorded. Thank you!"

        expInfo["MturkCODE"] = MturkNUMCODE
  Routine end
    TextComponent debrief_text1
      letterHeight = .04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] =  60
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      text:
        The next pages provide information about the purpose of this survey. After reviewing this information to your satisfaction, you will receive a code to submit your survey response. Thank you!

        Press the space bar to continue.
    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      durationEstim = 30
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine block_setup
    CodeComponent choose_conditions
      Code Type = Both
      Begin JS Routine:
        scenario_trials_selection = action_trials_selection = Array.from({length: 1}, () => util.randint(0, 16));
        action_trials_selection = action_trials_selection = Array.from({length: 3}, () => util.randint(0, 48));
      Begin Routine:
        scenario_trials_selection = randint(low=0,high=15,size=1)
        action_trials_selection = randint(low=0,high=47,size=3)
  Routine end2
    TextComponent debrief_text1_2
      letterHeight = .04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Thank you for your participation! We are examining the influence of mental representations on how people behave in situations requiring self-control.  For example, in previous experiments in our lab, we found that mental representations that cause people to think more globally and "big picture" (high-level construals) lead to greater self-control as compared to representations that cause thinking in a more local, "seeing the trees instead of the forest" manner (low-level construals).

        Press the space bar to continue.
    KeyboardComponent end_key_resp_2
      allowedKeys = 'space'
      durationEstim = 30
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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  Routine end3
    TextComponent debrief_text1_3
      durationEstim = 10
      letterHeight = .04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        In this study, you completed tasks designed to evoke either a high-level or low-level mindset. You then answered a variety of questions about your behavioral description preferences. We expect that the condition you were assigned to may have impacted some of the answers you provided.

        Press the space bar to continue.
    KeyboardComponent end_key_resp_3
      allowedKeys = 'space'
      durationEstim = 30
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] =  60
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  Routine end4
    TextComponent debrief_text1_4
      durationEstim = 10
      letterHeight = .04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Your data will remain confidential. Data are kept in locked areas. Your de-identified information may be used or shared with other researchers without your additional informed consent. If you have any questions about this study, please contact Kentaro Fujita (fujita.5@osu.edu).  If you have questions or concerns about your rights as a research participant, contact Sandra Meadows at The Office of Responsible Research Practices, 1-800-678-6251 or 1-614-688-4792 (see also their website at http://www.orrp.osu.edu/).

        Press the space bar to continue.
    KeyboardComponent end_key_resp_4
      allowedKeys = 'space'
      durationEstim = 30
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] =  60
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  Routine Mturk_Completion_Code
    TextComponent complete_code
      letterHeight = .04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 700
      text = $MturkCODE
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    KeyboardComponent end_key_resp_5
      allowedKeys = 'space'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] =  700
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Flow
  Routine setup
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = $conditions_file_name
    loopType = random
    nReps = 1
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    Routine block_setup
    LoopInitiator scenario_trials loopType="TrialHandler"
      Selected rows = $scenario_trials_selection
      conditionsFile = $scenario_file
      loopType = sequential
      nReps = 1
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      LoopInitiator action_trials loopType="TrialHandler"
        Selected rows = $action_trials_selection
        conditionsFile = conditions/action_conditions.csv
        loopType = random
        nReps = 1
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        Routine cue
        Routine action
      LoopTerminator action_trials
      Routine scenario_cue
      Routine scenario1
      Routine scenario2
      Routine scenario3
      Routine quitting_intention
    LoopTerminator scenario_trials
  LoopTerminator block
  Routine end
  Routine end2
  Routine end3
  Routine end4
  Routine Mturk_Completion_Code
